CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:Image_(?P<Row>[A-Z]{1})(?P<Col>[0-9]{1})_F(?P<Field>[0-9]{1}).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:Blue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Blue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):40,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:40
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:Green
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:5
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    Manual threshold:0.0
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

Smooth:[module_num:8|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
    Select the input image:Red
    Name the output image:FilteredRed
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:FilteredRed
    Name the primary objects to be identified:Bacteria
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:Bacteria
    Calculate the Zernike features?:No

FilterObjects:[module_num:11|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
    Select the objects to filter:Bacteria
    Name the output objects:FilteredBacteria
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:12|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
    Parent objects:Cells
    Child objects:Bacteria
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Green
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#0DFF00
    Select objects to display:Cells
    Select outline color:yellow
    Select objects to display:FilteredNuclei
    Select outline color:red
    Select objects to display:Bacteria

DisplayDataOnImage:[module_num:14|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
    Display object or image measurements?:Object
    Select the input objects:Cells
    Measurement to display:Children_Bacteria_Count
    Select the image on which to display the measurements:OrigOverlay
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):14
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
ConvertObjectsToImage:[module_num:15|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
    Select the input objects:Cells
    Name the output image:CellImage
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Blue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|Y:\\\\\\\\Stephen\\\\\\\\Courses\\\\\\\\CellProfiler\\\\\\\\Example data
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
